# Generated by Configurator on Sun Aug 11 16:30:50 CST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera,FakeCamera,FakeCamera
Device,Z,DemoCamera,DStage

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Z,-1

# Roles
Property,Core,Camera,Camera
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
ConfigGroup,System,Startup,Camera,Path mask,C:\Users\kaelz\Desktop\mm\fakecamera\imgs\psim\img_??.tif

# PixelSize settings

